---
API: 2.1
OpenSesame: 3.2.8
Platform: posix
---
set width 2560
set uniform_coordinates yes
set title scalar_mice
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 44100
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1440
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 30
set font_italic no
set font_family serif
set font_bold no
set experiment_path "/Users/ms/Documents/Academic/Work/mt_studies @UOS/scalar-mice/scalar-mice/supplemental_materials/OSexp files"
set disable_garbage_collection yes
set description "Default description"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background white

define sketchpad ITI
	set duration 500
	set description "Displays stimuli"
	draw rect color="#ffeb00" fill=1 h=64 penwidth=3 show_if=always w=64 x=-32 y=640 z_index=0

define sketchpad base_screen
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=250 penwidth=3 show_if=always w=250 x=-1280 y=-720 z_index=0
	draw rect color=black fill=0 h=250 penwidth=3 show_if=always w=250 x=1030 y=-720 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=100 html=yes show_if=always text=f x=-1161 y=-610 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=100 html=yes show_if=always text=w x=1161 y=-607 z_index=0
	draw rect color="#00bb00" fill=1 h=64 penwidth=3 show_if=always w=64 x=-32 y=640 z_index=0

define sketchpad base_screen_1
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=250 penwidth=3 show_if=always w=250 x=-1280 y=-720 z_index=0
	draw rect color=black fill=0 h=250 penwidth=3 show_if=always w=250 x=1030 y=-720 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=100 html=yes show_if=always text=w x=-1159 y=-623 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=100 html=yes show_if=always text=f x=1161 y=-607 z_index=0
	draw rect color="#00bb00" fill=1 h=64 penwidth=3 show_if=always w=64 x=-32 y=640 z_index=0

define sketchpad base_screen_test
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=100 penwidth=3 show_if=always w=250 x=-128 y=288 z_index=0
	draw rect color=black fill=0 h=250 penwidth=3 show_if=always w=250 x=-608 y=-320 z_index=0
	draw rect color=black fill=0 h=250 penwidth=3 show_if=always w=250 x=349 y=-320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text=w x=-490 y=-212 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text=f x=476 y=-201 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=50 html=yes show_if=always text=Start x=-5 y=332 z_index=0

define form_text_display end
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text OK
	set margins "50;50;50;50"
	set form_title "<span size=24></span>"
	set form_text "Das war's! Sie haben alle Durchgänge geschafft. Vielen Dank für Ihre Teilnahme."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions1 always
	run instructions2 always
	run instructions3 always
	run training always
	run middle_break always
	run test always
	run end always

define sketchpad feedback_inkorrekt
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=red font_bold=no font_family=serif font_italic=no font_size=30 html=yes show_if=always text=inkorrekt x=0 y=0 z_index=0

define sketchpad feedback_korrekt
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=green font_bold=no font_family=serif font_italic=no font_size=30 html=yes show_if=always text=korrekt x=1 y=0 z_index=0

define form_text_display instructions1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text OK
	set margins "50;50;50;50"
	set form_title "<span size=24> </span>"
	set form_text "Bitte lesen Sie die folgenden Instruktionen aufmerksam durch und versuchen Sie, diese während des Experimentverlaufs so nah wie möglich zu befolgen."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display instructions2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text OK
	set margins "50;50;50;50"
	set form_title "<span size=24> </span>"
	__form_text__
	Bitte bewegen Sie zu Beginn eines jeden Durchgangs den Mauszeiger zum Startpunkt. Dies ist das grüne Quadrat am unteren Bildschirmrand. Sie starten jeden Durchgang selbst, indem Sie den Startpunkt anklicken. Pro Durchgang wird Ihnen ein kurzer Satz Wort für Wort angezeigt. Am oberen Bildschirmrand sehen Sie zwei Antwortflächen, je eine für »wahr« (w) und eine für »falsch« (f). Bitte klicken Sie zügig auf die richtige Antwortfläche, je nachdem, ob Sie einen wahren oder einen falschen Satz gelesen haben.
	
	Bitte beginnen Sie unmittelbar mit Erscheinen des letzten Wortes des Satzes, den Mauszeiger in Richtung der Antwortflächen am oberen Bildschirmrand zu bewegen. Sollten Sie den Mauszeiger am Satzende nicht schnell genug nach oben bewegen, erscheint auf dem Bildschirm ein Warnsignal, nämlich ein “!!!”. Das ist nicht weiter schlimm. Es soll Sie nur daran erinnern, beim nächsten Durchgang die Maus zügiger bei Erscheinen des letzten Wortes nach oben zu bewegen.
	
	Nachdem Sie Ihre Wahl getroffen haben, verschwinden die beiden Antwortflächen und der grüne Startpunkt wird für einen kurzen Moment gelb. Bitte nutzen Sie diese »gelbe Ampelphase«, um den Mauszeiger wieder in die Startregion zurückzuführen. Sobald der Startpunkt wieder grün ist, können Sie in Ruhe den nächsten Durchgang starten, indem Sie erneut den Startpunkt anklicken.
	
	Sie haben vor und während dem Experiment die Möglichkeit, Rückfragen zum Ablauf zu stellen. Auch wenn das Experiment nur etwa 20 Minuten dauern wird, kann die Ihnen gestellte Aufgabe eintönig werden, so dass Sie vielleicht bald das Gefühl haben könnten, mit Ihren Reaktionen »in einen Trott« zu geraten. Bitte achten Sie darauf, Ihre Konzentration auf die Aufgabe über den gesamten Verlauf des Experiments aufrechtzuerhalten! Nutzen Sie gerne die Phasen vor einem Klick auf den Startpunkt, um beispielsweise Ihren Arm neu zu positionieren oder einfach kurz durchzuatmen.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display instructions3
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text OK
	set margins "50;50;50;50"
	set form_title "<span size=24> </span>"
	__form_text__
	Auf einen Blick:
	
	1. Beginnen Sie die Mausbewegung unmittelbar mit Erscheinen des letzten Wortes des Satzes.
	
	2. Antworten Sie zügig. Bei Verzögerungen erinnert Sie ein eingeblendetes “!!!” daran, beim nächsten Durchgang etwas schneller zu sein.
	
	3. Achten Sie aufmerksam und konzentriert auf die Sätze, die Ihnen präsentiert werden und versuchen Sie, stets die richtige Antwort anzuklicken.
	
	4. Nutzen Sie gerne die Pausen zwischen einzelnen Durchgängen zum Verschnaufen, damit Sie konzentriert und doch angenehm arbeiten können.
	
	
	Viel Spaß beim Experiment und vielen Dank für Ihre Teilnahme!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad last_word
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=250 penwidth=3 show_if=always w=250 x=-1280 y=-720 z_index=0
	draw rect color=black fill=0 h=250 penwidth=3 show_if=always w=250 x=1030 y=-720 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=100 html=yes show_if=always text=f x=-1161 y=-610 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=100 html=yes show_if=always text=w x=1161 y=-607 z_index=0
	draw rect color="#00bb00" fill=1 h=64 penwidth=3 show_if=always w=64 x=-32 y=640 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define form_text_display middle_break
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text OK
	set margins "50;50;50;50"
	set form_title "<span size=24></span>"
	__form_text__
	Sie haben die Trainingsphase abgeschlossen.
	
	Zur Erinnerung:
	
	1. Beginnen Sie die Mausbewegung unmittelbar mit Erscheinen des letzten Wortes des Satzes.
	
	2. Antworten Sie zügig. Bei Verzögerungen erinnert Sie ein eingeblendetes “!!!” daran, beim nächsten Durchgang etwas schneller zu sein.
	
	3. Achten Sie aufmerksam und konzentriert auf die Sätze, die Ihnen präsentiert werden und versuchen Sie, stets die richtige Antwort anzuklicken.
	
	4. Nutzen Sie gerne die Pausen zwischen einzelnen Durchgängen zum Verschnaufen, damit Sie konzentriert und doch angenehm arbeiten können.
	
	Sobald Sie bereit sind, klicken Sie auf "OK", um mit der Hauptphase des Experiments zu beginnen.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define mousetrap_response mt_startbutton_test
	__warning_message__
	draw textline text="Bitte starten" x=0 y=0 sketchpad=pad
	__end__
	set update_feedback no
	set timeout infinite
	set start_coordinates "0;520"
	set skip_item no
	set sketchpad ""
	set save_trajectories yes
	set reset_mouse no
	set number_of_buttons 1
	set mouse_buttons_allowed "1;3"
	set max_initiation_time 2500
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button ""
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 ""
	set button1 "x=-32 y=640 w=64 h=64 name=start"
	set boundaries "upper=no lower=no left=no right=no"

define mousetrap_response mt_startbutton_training
	__warning_message__
	draw textline text="Bitte starten" x=0 y=0 sketchpad=pad
	__end__
	set update_feedback no
	set timeout infinite
	set start_coordinates "0;520"
	set skip_item no
	set sketchpad ""
	set save_trajectories yes
	set reset_mouse no
	set number_of_buttons 1
	set mouse_buttons_allowed "1;3"
	set max_initiation_time 2500
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button ""
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 ""
	set button1 "x=-32 y=640 w=64 h=64 name=start"
	set boundaries "upper=no lower=no left=no right=no"

define inline_script stimuli
	set description "Executes Python code"
	___run__
	for target_nr, target_canvas in enumerate(target_canvas_list):
		t0 = target_canvas.show()
		if target_nr != len(target_canvas_list) - 1:
			clock.sleep(295)
		else:
			items['last_word'].canvas = target_canvas
	__end__
	___prepare__
	target_canvas_list = []
	for target in var.stimulus.split(' ', 3 ):
		target_canvas = canvas() # add global style arguments here, comma-separated
		target_canvas.rect(color=u'black', fill=False, h=250, penwidth=3, w=250, x=-1280, y=-720)
		target_canvas.rect(color=u'black', fill=False, h=250, penwidth=3, w=250, x=1030, y=-720)
		target_canvas.text('f', color=u'black', center=True, x=-1161.0, y=-610.0, font_family='sans', font_size=100)
		target_canvas.text('w', color=u'black', center=True, x=1161, y=-607, font_family='sans', font_size=100)
		target_canvas.text("<span style='color:rgba(0,0,0,.01)'>gb</span>" + target + "<span style='color:rgba(0,0,0,.01)'>gb</span>")
		target_canvas_list.append(target_canvas)
	__end__

define inline_script stimuli_test
	set description "Executes Python code"
	___run__
	for target_nr, target_canvas in enumerate(target_canvas_list):
		t0 = target_canvas.show()
		if target_nr != len(target_canvas_list) - 1:
			clock.sleep(295)
		else:
			items['last_word_test'].canvas = target_canvas
	__end__
	___prepare__
	target_canvas_list = []
	for target in var.stimulus.split(' ', 3 ):
		target_canvas = canvas() # add global style arguments here, comma-separated
		target_canvas.rect(color=u'black', fill=False, h=250, penwidth=3, w=250, x=-608, y=-320)
		target_canvas.rect(color=u'black', fill=False, h=250, penwidth=3, w=250, x=349, y=-320)
		target_canvas.rect(color=u'black', fill=False, h=100, penwidth=3, w=250, x=-128, y=288)
		target_canvas.text('w', color=u'black', center=True, x=-490, y=-212, font_family='sans', font_size=50)
		target_canvas.text('f', color=u'black', center=True, x=476, y=-201, font_family='sans', font_size=50)
		target_canvas.text('Start', color=u'black', center=True, x=-5, y=332, font_family='sans', font_size=50)
		target_canvas.text("<span style='color:rgba(0,0,0,.01)'>gb</span>" + target + "<span style='color:rgba(0,0,0,.01)'>gb</span>")
		target_canvas_list.append(target_canvas)
	__end__

define loop test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 180
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimulus "Einige Tauben sind Vögel."
	setcycle 0 correct_response w
	setcycle 0 sentence_type "Some critical"
	setcycle 1 stimulus "Einige Fähren sind Verkehrsmittel."
	setcycle 1 correct_response w
	setcycle 1 sentence_type "Some critical"
	setcycle 2 stimulus "Einige Romane sind Bücher."
	setcycle 2 correct_response w
	setcycle 2 sentence_type "Some critical"
	setcycle 3 stimulus "Einige Wolkenkratzer sind Gebäude."
	setcycle 3 correct_response w
	setcycle 3 sentence_type "Some critical"
	setcycle 4 stimulus "Einige Ferraris sind Autos."
	setcycle 4 correct_response w
	setcycle 4 sentence_type "Some critical"
	setcycle 5 stimulus "Einige Tiger sind Katzen."
	setcycle 5 correct_response w
	setcycle 5 sentence_type "Some critical"
	setcycle 6 stimulus "Einige Hemden sind Kleidungsstücke."
	setcycle 6 correct_response w
	setcycle 6 sentence_type "Some critical"
	setcycle 7 stimulus "Einige Labradore sind Hunde."
	setcycle 7 correct_response w
	setcycle 7 sentence_type "Some critical"
	setcycle 8 stimulus "Einige Pudel sind Hunde."
	setcycle 8 correct_response w
	setcycle 8 sentence_type "Some critical"
	setcycle 9 stimulus "Einige Biere sind Getränke."
	setcycle 9 correct_response w
	setcycle 9 sentence_type "Some critical"
	setcycle 10 stimulus "Einige Weine sind Getränke."
	setcycle 10 correct_response w
	setcycle 10 sentence_type "Some critical"
	setcycle 11 stimulus "Einige Haie sind Fische."
	setcycle 11 correct_response w
	setcycle 11 sentence_type "Some critical"
	setcycle 12 stimulus "Einige Kabeljaus sind Fische."
	setcycle 12 correct_response w
	setcycle 12 sentence_type "Some critical"
	setcycle 13 stimulus "Einige Rosen sind Blumen."
	setcycle 13 correct_response w
	setcycle 13 sentence_type "Some critical"
	setcycle 14 stimulus "Einige Erdbeeren sind Früchte."
	setcycle 14 correct_response w
	setcycle 14 sentence_type "Some critical"
	setcycle 15 stimulus "Einige Äpfel sind Früchte."
	setcycle 15 correct_response w
	setcycle 15 sentence_type "Some critical"
	setcycle 16 stimulus "Einige Betten sind Möbel."
	setcycle 16 correct_response w
	setcycle 16 sentence_type "Some critical"
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	setcycle 30 stimulus "Alle Tauben sind Vögel."
	setcycle 30 correct_response w
	setcycle 30 sentence_type "All true"
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	setcycle 60 stimulus "Alle Tauben sind Steine."
	setcycle 60 correct_response f
	setcycle 60 sentence_type "All false"
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	setcycle 90 stimulus "Einige Vögel sind Tauben."
	setcycle 90 correct_response w
	setcycle 90 sentence_type "Some true"
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	setcycle 120 stimulus "Einige Tauben sind Steine."
	setcycle 120 correct_response f
	setcycle 120 sentence_type "Some false"
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	setcycle 150 stimulus "Einige Tauben sind weiblich."
	setcycle 150 correct_response w
	setcycle 150 sentence_type "Some subordinate true"
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	run trials_test

define mousetrap_response tracking1_test
	__warning_message__
	draw textline center=1 color=red text="Schneller bitte" x=0 y=0 sketchpad=base_screen
	__end__
	set update_feedback yes
	set timeout 290
	set start_coordinates "0;670"
	set skip_item no
	set sketchpad ""
	set save_trajectories yes
	set reset_mouse yes
	set number_of_buttons 0
	set mouse_buttons_allowed "1;3"
	set max_initiation_time 500
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button ""
	set click_required no
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 "h=250 w=250 x=352 y=-384 name=f"
	set button1 "h=250 w=250 x=-640 y=-384  name=w"
	set boundaries "upper=no lower=no left=no right=no"

define mousetrap_response tracking1_training
	__warning_message__
	draw textline center=1 color=red text="Schneller bitte" x=0 y=0 sketchpad=base_screen
	__end__
	set update_feedback yes
	set timeout 290
	set start_coordinates "0;670"
	set skip_item no
	set sketchpad ""
	set save_trajectories yes
	set reset_mouse yes
	set number_of_buttons 0
	set mouse_buttons_allowed "1;3"
	set max_initiation_time 500
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button ""
	set click_required no
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 "h=250 w=250 x=352 y=-384 name=f"
	set button1 "h=250 w=250 x=-640 y=-384  name=w"
	set boundaries "upper=no lower=no left=no right=no"

define mousetrap_response tracking2_test
	__warning_message__
	draw textline center=1 color=red text="!!!" x=0 y=0 sketchpad=base_screen
	__end__
	set update_feedback yes
	set timeout infinite
	set start_coordinates "0;280"
	set skip_item no
	set sketchpad ""
	set save_trajectories yes
	set reset_mouse no
	set number_of_buttons 2
	set mouse_buttons_allowed "1;3"
	set max_initiation_time 195
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button "[correct_response]"
	set click_required yes
	set check_initiation_time yes
	set button4 ""
	set button3 ""
	set button2 "h=250 w=250 x=1030 y=-720 name=w"
	set button1 "h=250 w=250 x=-1280 y=-720 name=f"
	set boundaries "upper=no lower=no left=no right=no"

define mousetrap_response tracking2_training
	__warning_message__
	draw textline center=1 color=red text="!!!" x=0 y=0 sketchpad=base_screen
	__end__
	set update_feedback yes
	set timeout infinite
	set start_coordinates "0;280"
	set skip_item no
	set sketchpad ""
	set save_trajectories yes
	set reset_mouse no
	set number_of_buttons 2
	set mouse_buttons_allowed "1;3"
	set max_initiation_time 195
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button "[correct_response]"
	set click_required yes
	set check_initiation_time yes
	set button4 ""
	set button3 ""
	set button2 "h=250 w=250 x=1030 y=-720 name=w"
	set button1 "h=250 w=250 x=-1280 y=-720 name=f"
	set boundaries "upper=no lower=no left=no right=no"

define loop training
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 100
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimulus "Alle Laubbäume sind Pflanzen."
	setcycle 0 correct_response w
	setcycle 0 sentence_type "All true"
	setcycle 1 stimulus "Alle Pferde sind Zitronen."
	setcycle 1 correct_response f
	setcycle 1 sentence_type "All false"
	setcycle 2 stimulus "Einige Vögel sind Papageien."
	setcycle 2 correct_response w
	setcycle 2 sentence_type "Some true"
	setcycle 3 stimulus "Einige Schweine sind Schrauben."
	setcycle 3 correct_response f
	setcycle 3 sentence_type "Some false"
	setcycle 4 stimulus "Einige Tische sind aus Metall."
	setcycle 4 correct_response w
	setcycle 4 sentence_type "Some subordinate true"
	setcycle 5 stimulus "Alle Tomaten sind Möbel."
	setcycle 5 correct_response f
	setcycle 5 sentence_type "All false"
	setcycle 6 stimulus "Einige Sträucher sind Leute."
	setcycle 6 correct_response f
	setcycle 6 sentence_type "Some false"
	setcycle 7 stimulus "Einige Bären sind Säugetiere."
	setcycle 7 correct_response w
	setcycle 7 sentence_type "Some critical"
	setcycle 8 stimulus "Einige Mützen sind gehäkelt."
	setcycle 8 correct_response w
	setcycle 8 sentence_type "Some subordinate true"
	setcycle 9 stimulus "Alle Tees sind Getränke."
	setcycle 9 correct_response w
	setcycle 9 sentence_type "All true"
	setcycle 10 stimulus "Einige Gläser sind Schlangen."
	setcycle 10 correct_response f
	setcycle 10 sentence_type "Some false"
	setcycle 11 stimulus "Einige Briefe sind Post."
	setcycle 11 correct_response w
	setcycle 11 sentence_type "Some critical"
	setcycle 12 stimulus "Einige Pflanzen sind Tulpen."
	setcycle 12 correct_response w
	setcycle 12 sentence_type "Some true"
	setcycle 13 stimulus "Einige Telefone sind kabellos."
	setcycle 13 correct_response w
	setcycle 13 sentence_type "Some subordinate true"
	setcycle 14 stimulus "Einige Tassen sind Geschirr."
	setcycle 14 correct_response w
	setcycle 14 sentence_type "Some critical"
	setcycle 15 stimulus "Einige Leichtathletinnen sind gedopt."
	setcycle 15 correct_response w
	setcycle 15 sentence_type "Some subordinate true"
	setcycle 16 stimulus "Einige Handys sind Telefone."
	setcycle 16 correct_response w
	setcycle 16 sentence_type "Some critical"
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	run trials_training

define sequence trials_test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run base_screen always
	run mt_startbutton_test always
	run stimuli always
	run last_word always
	run tracking1_test always
	run base_screen always
	run tracking2_test always
	run ITI always
	run logger always

define sequence trials_training
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run base_screen always
	run mt_startbutton_training always
	run stimuli always
	run last_word always
	run tracking1_training always
	run base_screen always
	run tracking2_training always
	run logger always
	run feedback_korrekt "[correct] = 1"
	run feedback_inkorrekt "[correct] = 0"

